---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Nouvelle expérience"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Fred/Dropbox/Fac/Thesis/Expe/OS-Dble-Task"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define inline_script Audio_Loop
	set description "Executes Python code"
	___run__
	
	
		
	###################################
	# ON BOUCLE max_trial_duration MINUTES
	###################################
	for var.ms in clock.loop_for(max_trial_duration*60*1000):
		
		# just to see where we are in the logger :
		var.trial = True
		
		###################################
		# On appelle le participant (ding)
		###################################
		my_sampler = Sampler(ding_file)
		my_sampler.play(volume=signal_volume)
		my_canvas.fixdot()
		my_canvas.show()
	
		clock.sleep(1500)
		my_canvas.clear()
		my_canvas.show()
	
		####################################################
		# On lance les trois sons 1 sec après l'autre
		# le canal (gauche ou droit) est choisi aléatoirement
		####################################################
		mp3_sampler = Sampler(exp.pool[str(R[0]) + '.ogg'], pan = aleaCanal())
		mp3_sampler.play(volume=1.0, pitch=.75)
		clock.sleep(1000)
		mp3_sampler = Sampler(exp.pool[str(R[1]) + '.ogg'], pan = aleaCanal())
		mp3_sampler.play(volume=1.0, pitch=.75)
		clock.sleep(1000)
		mp3_sampler = Sampler(exp.pool[str(R[2]) + '.ogg'], pan = aleaCanal())
		mp3_sampler.play(volume=1.0, pitch=.75)
		clock.sleep(1000)
		
		
		#########################################
		# On attend la réponse ?
		#########################################
		my_keyboard.flush()
		t = clock.time()
		# pas pour la premiere boucle
		if var.ms > 0:
			var.key, var.key_time = my_keyboard.get_key()
			if var.key == u'space' and var.same == 'yes':
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			elif var.key != u'space' and var.same == 'no':	
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			else:
				bad_canvas.show()
				var.answers_count_bad = var.answers_count_bad +1
			if var.same == 'yes':
				if var.key == u'space':
					var.good_same_count = var.good_same_count + 1
				else:
					var.bad_same_count = var.bad_same_count + 1
			clock.sleep(1000)
			clear_canvas.show()
			
		log.write_vars()
		tt = clock.time()
		# on attend 10 à 20 secondes et on sauvegarde dans var.delay
		n = np.random.randint(min_delay_time,max_delay_time)
		var.delay = n*1000-(tt-t)
		clock.sleep (var.delay)
		 
		################################################
		# On choisi si les suivantes seront congruentes
		# ou non (30 % de congruentes)
		################################################
		if np.random.random() > 0.3:
			var.same = False
		else:
			var.same = True
		
		##########################################
		# Si congruent : on ne fait que mélanger
		# sinon il faut en rechoisir trois autres
		# en vérifiant que ce n'est pas le même
		# dans le désordre
		##########################################
		if var.same == 'yes':
			np.random.shuffle(R)
		else:
			R = differentSerie()
		print (R)
				
	##############################
	# FIN DE LA BOUCLE TEMPORELLE
	##############################
	__end__
	___prepare__
	import numpy as np
	np.random.seed()
	
	var.same = True
	var.delay = 0
	
	#############################################
	# init first three images
	# on en choisi trois parmi 8 sans répétition
	#############################################
	R = np.random.choice(7, 3, replace=False) + 1
	
	###################################
	# Init first three positions
	# Ecran découpé en 4 x 2 = 8 blocs
	###################################
	my_canvas = canvas(exp)
	w = my_canvas.width / 8
	h = my_canvas.height / 4
	
	
	###################################
	# le fichier audio pour le ding
	###################################
	ding_file = pool['notify.wav']
	my_sampler = Sampler(ding_file)
	
	mp3_file = pool['1.ogg']
	mp3_sampler = Sampler(mp3_file)
	
	###################################
	# Prepare keyboard - 10 sec timeout
	###################################
	my_keyboard = keyboard(keylist=['space'], timeout=5*1000)
	
	###################################
	# init a good & bad answer canvas
	###################################
	good_canvas = canvas()
	good_canvas.text('<b>Bonne réponse !!</b>')
	bad_canvas = canvas()
	bad_canvas.text('<b>Mauvaise réponse !!</b>')
	clear_canvas = canvas()
	#################################################
	# Compteurs pour les bonnes et mauvaises réponses
	#################################################
	answers_count_good = 0
	answers_count_bad  = 0
	
	def differentSerie():
		while True:
			Rr = np.random.choice(7, 3, replace=False) + 1
			if sorted(R)!=sorted(Rr):
				break
		return Rr
	def aleaCanal():
		if np.random.random() > 0.5:
			canal = 'left'
		else:
			canal = 'right'
		return canal
	__end__

define inline_script Chiffres_Loop
	set description "Executes Python code"
	___run__
	
	
		
	###################################
	# ON BOUCLE max_trial_duration MINUTES
	###################################
	for var.ms in clock.loop_for(max_trial_duration*60*1000):
		
		# just to see where we are in the logger :
		var.trial = True
		
		###################################
		# On appelle le participant (ding)
		###################################
		my_sampler = Sampler(ding_file)
		my_sampler.play(volume=signal_volume)
		my_canvas.fixdot()
		my_canvas.show()
	
		clock.sleep(1500)
		my_canvas.clear()
	
		#########################################
		# On affiche les trois images à la suite
		#########################################
		my_canvas.image(exp.pool[str(R[0]) + '.png'], x=X_a, y=Y_a)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.image(exp.pool[str(R[1]) + '.png'], x=X_b, y=Y_b)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.image(exp.pool[str(R[2]) + '.png'], x=X_c, y=Y_c)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.show()
		
		#########################################
		# On attend la réponse ?
		#########################################
		my_keyboard.flush()
		t = clock.time()
		# pas pour la premiere boucle
		if var.ms > 0:
			var.key, var.key_time = my_keyboard.get_key()
			if var.key == u'space' and var.same == 'yes':
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			elif var.key != u'space' and var.same == 'no':	
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			else:
				bad_canvas.show()
				var.answers_count_bad = var.answers_count_bad +1
			if var.same == 'yes':
				if var.key == u'space':
					var.good_same_count = var.good_same_count + 1
				else:
					var.bad_same_count = var.bad_same_count + 1
			clock.sleep(1000)
			clear_canvas.show()
			
		log.write_vars()
		tt = clock.time()
		# on attend 10 à 20 secondes et on sauvegarde dans var.delay
		n = np.random.randint(min_delay_time,max_delay_time)
		var.delay = n*1000-(tt-t)
		clock.sleep (var.delay)
		
		################################################
		# On choisi si les suivantes seront congruentes
		# ou non (30 % de congruentes)
		################################################
		if np.random.random() > 0.3:
			var.same = False
		else:
			var.same = True
		
		##########################################
		# Si congruent : on ne fait que mélanger
		# sinon il faut en rechoisir trois autres
		# en vérifiant que ce n'est pas le même
		# dans le désordre
		##########################################	
		if var.same == 'yes':
			np.random.shuffle(R)
		else:
			R = differentSerie()
		print (R)
		##########################################
		# On modifie la localisation
		##########################################
		X_a = tx[np.random.randint(0,4)]
		Y_a = ty[np.random.randint(0,2)]
		
		while True:
			X_b = tx[np.random.randint(0,4)]
			Y_b = ty[np.random.randint(0,2)]
			if 10*X_a+Y_a != 10*X_b+Y_b:
				break
		
		while True:
			X_c = tx[np.random.randint(0,4)]
			Y_c = ty[np.random.randint(0,2)]
			if 10*X_a+Y_a != 10*X_c+Y_c:
				if 10*X_b+Y_b != 10*X_c+Y_c:
					break
				
	##############################
	# FIN DE LA BOUCLE TEMPORELLE
	##############################
	__end__
	___prepare__
	import numpy as np
	np.random.seed()
	
	var.same = True
	var.delay = 0
	
	#############################################
	# init first three images
	# on en choisi trois parmi 8 sans répétition
	#############################################
	R = np.random.choice(7, 3, replace=False) + 1
	
	###################################
	# Init first three positions
	# Ecran découpé en 4 x 2 = 8 blocs
	###################################
	my_canvas = canvas(exp)
	w = my_canvas.width / 8
	h = my_canvas.height / 4
	
	tx = [-3*w, -w, w, +3*w]
	ty = [-h, +h]
	
	X_a = tx[np.random.randint(0,4)]
	Y_a = ty[np.random.randint(0,2)]
	
	while True:
		X_b = tx[np.random.randint(0,4)]
		Y_b = ty[np.random.randint(0,2)]
		if 10*X_a+Y_a != 10*X_b+Y_b:
			break
		
	while True:
		X_c = tx[np.random.randint(0,4)]
		Y_c = ty[np.random.randint(0,2)]
		if 10*X_a+Y_a != 10*X_c+Y_c:
			if 10*X_b+Y_b != 10*X_c+Y_c:
				break
	
	###################################
	# le fichier audio pour le ding
	###################################
	ding_file = pool['notify.wav']
	my_sampler = Sampler(ding_file)
	
	###################################
	# Prepare keyboard - 10 sec timeout
	###################################
	my_keyboard = keyboard(keylist=['space'], timeout=5*1000)
	
	###################################
	# init a good & bad answer canvas
	###################################
	good_canvas = canvas()
	good_canvas.text('<b>Bonne réponse !!</b>')
	bad_canvas = canvas()
	bad_canvas.text('<b>Mauvaise réponse !!</b>')
	clear_canvas = canvas()
	#################################################
	# Compteurs pour les bonnes et mauvaises réponses
	#################################################
	var.answers_count_good = 0
	var.answers_count_bad  = 0
	var.good_same_count = 0
	var.bad_same_count = 0
	
	####################################################
	# Générateur d'une série différente de la précédente
	####################################################
	def differentSerie():
		while True:
			Rr = np.random.choice(7, 3, replace=False) + 1
			if sorted(R)!=sorted(Rr):
				break
		return Rr
	__end__

define inline_script Control_Loop
	set description "Executes Python code"
	___run__
	###################################
	# ON BOUCLE max_trial_duration MINUTES
	###################################
	for var.ms in clock.loop_for(max_trial_duration*60*1000):
		
		# On efface les instructions
		my_canvas.clear()
		my_canvas.show()
		
		# just to see where we are in the logger :
		var.trial = True
		t = clock.time()
		
		###################################
		# On appelle le participant (ding)
		###################################
		my_sampler = Sampler(ding_file)
		my_sampler.play(volume=signal_volume)
		
		if var.same == 'yes':
			my_canvas.fixdot()
			my_canvas.show()
		
		#clock.sleep(4000)
		
		#########################################
		# On attend la réponse ?
		#########################################
		my_keyboard.flush()
		t = clock.time()
		# pas pour la premiere boucle
		var.key, var.key_time = my_keyboard.get_key()
		if var.key == u'space' and var.same == 'yes':
			good_canvas.show()
			var.answers_count_good = var.answers_count_good + 1
		elif var.key != u'space' and var.same == 'no':	
			good_canvas.show()
			var.answers_count_good = var.answers_count_good + 1
		else:
			bad_canvas.show()
			var.answers_count_bad = var.answers_count_bad +1
		if var.same == 'yes':
				if var.key == u'space':
					var.good_same_count = var.good_same_count + 1
				else:
					var.bad_same_count = var.bad_same_count + 1
		clock.sleep(1000)
		clear_canvas.show()
			
		log.write_vars()
		tt = clock.time()
		# on attend 10 à 20 secondes et on sauvegarde dans var.delay
		n = np.random.randint(min_delay_time,max_delay_time)
		var.delay = n*1000-(tt-t)
		clock.sleep (var.delay)
		
		############################################################
		# à la boucle suivante on choisi ou pas d'afficher le point
		############################################################
		if np.random.random() > 0.3:
			var.same = False
		else:
			var.same = True
		
	##############################
	# FIN DE LA BOUCLE TEMPORELLE
	##############################
	__end__
	___prepare__
	import numpy as np
	np.random.seed()
	
	######################
	# pour démarrer 
	######################
	if np.random.random() > 0.3:
		var.same = False
	else:
		var.same = True
		
	###################################
	# Prepare keyboard - 10 sec timeout
	###################################
	my_keyboard = keyboard(keylist=['space'], timeout=5*1000)
	
	#################################################
	# Compteurs pour les bonnes et mauvaises réponses
	#################################################
	answers_count_good = 0
	answers_count_bad  = 0
	__end__

define sequence Controle
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Instr_Control "[my_condition] = 'Contrôle'"
	run Control_Loop "[my_condition] = 'Contrôle'"

define inline_script Init_condition
	set description "Executes Python code"
	___run__
	# init a form
	gender_check = Form(exp, cols = 1, rows = 7, spacing = 10, margins = (100,100,100,100), theme = u'gray')
	# create the objects
	label = Label(text = "Choix de la condition :")
	
	checkbox1 = Checkbox(text = "Test", group = "group", var='my_condition')
	checkbox2 = Checkbox(text = "Visuel", group = "group", var='my_condition')
	checkbox3 = Checkbox(text = "Spatial", group = "group", var='my_condition')
	checkbox4 = Checkbox(text = "Verbal", group = "group", var='my_condition')
	checkbox5 = Checkbox(text = "Contrôle", group = "group", var='my_condition')
	
	button_next = Button(text = "Valider")
	
	gender_check.set_widget(label, (0,0))
	gender_check.set_widget(checkbox1, (1,0))
	gender_check.set_widget(checkbox2, (2,0))
	gender_check.set_widget(checkbox3, (3,0))
	gender_check.set_widget(checkbox4, (4,0))
	gender_check.set_widget(checkbox5, (5,0))
	gender_check.set_widget(button_next, (6,0))
	
	box_not_checked = True
	
	while var.my_condition =='no':
		gender_check._exec()
	print (var.my_condition)
	__end__
	___prepare__
	################################
	# Signal d'appel du participant
	# Volume du signal (ding)
	################################
	signal_volume = 0.4
	
	#############################################################
	# délai entre deux présentations
	# la série sera présentée entre min et max_delay_time secondes
	#############################################################
	min_delay_time = 20
	max_delay_time = 30
	
	################################################
	# Durée totale de la tâche en minutes
	# (i.e. pendant combien de temps on va boucler)
	################################################
	max_trial_duration = 10
	max_expe_duration  = 5
	__end__

define sketchpad Instr_Control
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>Instructions :</b><br /><br />1) l'ordinateur émettra toutes les 20 à 30 secondes, un signal vous invitant à regarder l'écran immédiatement<br />2) quelquesfois vous aurez un point dessiné au centre de l'écran : :" x=-480 y=-224 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text="Si vous avez bien compris ces instructions,<br>vous pouvez commencer en appuyant sur la barre d'espace" x=0 y=320 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="3) vous devrez alors appuyer sur la barre d'espace. S'il n'y a pas de point, vous n'avez rien à faire.<br />4) vous pouvez ensuite directement reprendre votre activité jusqu'à la prochaine sollicitation.<br /><br />C'est aussi simple, mais vous devez observer strictement ces consignes." x=-480 y=96 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad Instr_Spatial
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>Instructions :</b><br /><br />1) l'ordinateur émettra toutes les 20 à 30 secondes, un signal vous invitant à regarder l'écran immédiatement<br />2) vous verrez alors successivement trois figures géométriques comme celles-ci, à trois localisations différentes sur l'écran :" x=-480 y=-320 z_index=0
	draw image center=0 file="1.bmp" scale=1 show_if=always x=-416 y=-160 z_index=0
	draw image center=0 file="2.bmp" scale=1 show_if=always x=-96 y=-160 z_index=0
	draw image center=0 file="3.bmp" scale=1 show_if=always x=224 y=-160 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=-192 y=-96 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=128 y=-96 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text="Si vous avez bien compris ces instructions,<br>vous pouvez commencer en appuyant sur la barre d'espace" x=0 y=320 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="3) si ces trois figures sont affichées aux mêmes localisations sur l'écran que les trois figures de la série précédente, appuyez immédiatement sur la barre d'espace.<br />La figure elle-même et l'ordre d'apaprition n'ont pas d'importance. Il suffit que les localisations soient identiques.<br />4) si les trois localisations ne sont pas identiques, vous n'avez rien à faire et vous pouvez directement reprendre votre activité jusqu'à la prochaine sollicitation.<br /><br />Vous devez vous souvenir des dernières figures présentées pour pouvoir vérifier la correspondance." x=-480 y=0 z_index=0

define sketchpad Instr_Verbal
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>Instructions :</b><br /><br />1) l'ordinateur émettra toutes les 20 à 30 secondes, un signal vous invitant à regarder l'écran immédiatement<br />2) vous entendrez alors successivement trois syllabes comme celles-ci :" x=-480 y=-320 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=-192 y=-96 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=128 y=-96 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text="Si vous avez bien compris ces instructions,<br>vous pouvez commencer en appuyant sur la barre d'espace" x=0 y=320 z_index=0
	draw textline center=0 color="#ffff00" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=bah x=-352 y=-96 z_index=0
	draw textline center=0 color="#ffff00" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=yoh x=-32 y=-96 z_index=0
	draw textline center=0 color="#ffff00" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=gor x=288 y=-96 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="3) si ces trois syllabes sont identiques aux trois syllabes de la série précédente, appuyez rapidement sur la barre d'espace.<br />L'ordre pas d'importance. Il suffit qu'elles soit identiques.<br />4) si les syllabes ne sont pas identiques, vous n'avez rien à faire et vous pouvez directement reprendre votre activité jusqu'à la prochaine sollicitation.<br /><br />Vous devez vous souvenir des dernières syllabes pour pouvoir vérifier la correspondance." x=-480 y=0 z_index=0

define sketchpad Instr_Visual
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>Instructions :</b><br /><br />1) l'ordinateur émettra toutes les 20 à 30 secondes, un signal vous invitant à regarder l'écran immédiatement<br />2) vous verrez alors successivement trois figures géométriques comme celles-ci, à trois positions différentes sur l'écran :" x=-480 y=-320 z_index=0
	draw image center=0 file="1.bmp" scale=1 show_if=always x=-416 y=-160 z_index=0
	draw image center=0 file="2.bmp" scale=1 show_if=always x=-96 y=-160 z_index=0
	draw image center=0 file="3.bmp" scale=1 show_if=always x=224 y=-160 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=-192 y=-96 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=128 y=-96 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text="Si vous avez bien compris ces instructions,<br>vous pouvez commencer en appuyant sur la barre d'espace" x=0 y=320 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="3) si ces trois figures sont identiques aux trois figures de la série précédente, appuyez rapidement sur la barre d'espace.<br />L'ordre d'apparition et la position sur l'écran n'ont pas d'importance. Il suffit qu'elles soit identiques.<br />4) si les figures ne sont pas identiques, vous n'avez rien à faire et vous pouvez directement reprendre votre activité jusqu'à la prochaine sollicitation.<br /><br />Vous devez vous souvenir des dernières figures présentées pour pouvoir vérifier la correspondance." x=-480 y=0 z_index=0

define sketchpad Instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>Instructions :</b><br /><br />1) l'ordinateur émettra toutes les 20 à 30 secondes, un signal vous invitant à regarder l'écran immédiatement<br />2) vous verrez alors successivement trois figures géométriques comme celles-ci :" x=-480 y=-320 z_index=0
	draw image center=0 file="2.png" scale=1 show_if=always x=-416 y=-160 z_index=0
	draw image center=0 file="5.png" scale=1 show_if=always x=-96 y=-160 z_index=0
	draw image center=0 file="3.png" scale=1 show_if=always x=224 y=-160 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=-192 y=-96 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text=puis x=128 y=-96 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text="Si vous avez bien compris ces instructions,<br>vous pouvez commencer en appuyant sur la barre d'espace" x=0 y=320 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="3) si ces trois figures sont identiques aux trois figures de la série précédente, appuyez immédiatement sur la barre d'espace.<br />L'ordre d'apaprition et la position sur l'écran n'ont pas d'importance. Il suffit qu'elles soit identiques.<br />4) si les figures ne sont pas identiques, vous n'avez rien à faire et vous pouvez directement reprendre votre activité jusqu'à la prochaine sollicitation.<br /><br />Vous devez vous souvenir des dernières figures présentées pour pouvoir vérifier la correspondance." x=-480 y=0 z_index=0

define sketchpad Remerciements
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=21 html=yes show_if=always text="Merci de votre participation !!" x=0 y=-32 z_index=0
	draw image center=1 file="smiley_icon_64.png" scale=1 show_if=always x=0 y=64 z_index=0

define sequence Spatial
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Instr_Spatial "[my_condition] = 'Spatial'"
	run Spatial_Loop "[my_condition] = 'Spatial'"

define inline_script Spatial_Loop
	set description "Executes Python code"
	___run__
	
	
		
	###################################
	# ON BOUCLE max_trial_duration MINUTES
	###################################
	for var.ms in clock.loop_for(max_trial_duration*60*1000):
		
		# just to see where we are in the logger :
		var.trial = True
		
		###################################
		# On appelle le participant (ding)
		###################################
		my_sampler = Sampler(ding_file)
		my_sampler.play(volume=signal_volume)
		my_canvas.fixdot()
		my_canvas.show()
	
		clock.sleep(1500)
		my_canvas.clear()
	
		#########################################
		# On affiche les trois images à la suite
		#########################################
		i, d = divmod(loc[1], 1)
		my_canvas.image(exp.pool[str(R[0]) + '.bmp'], x=i, y=d*10)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		i, d = divmod(loc[2], 1)
		my_canvas.image(exp.pool[str(R[1]) + '.bmp'], x=i, y=d*10)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		i, d = divmod(loc[2], 1)
		my_canvas.image(exp.pool[str(R[2]) + '.bmp'], x=i, y=d*10)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.show()
		
		#########################################
		# On attend la réponse ?
		#########################################
		my_keyboard.flush()
		t = clock.time()
		# pas pour la premiere boucle
		if var.ms > 0:
			var.key, var.key_time = my_keyboard.get_key()
			if var.key == u'space' and var.same == 'yes':
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			elif var.key != u'space' and var.same == 'no':	
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			else:
				bad_canvas.show()
				var.answers_count_bad = var.answers_count_bad +1
			if var.same == 'yes':
				if var.key == u'space':
					var.good_same_count = var.good_same_count + 1
				else:
					var.bad_same_count = var.bad_same_count + 1
			clock.sleep(1000)
			clear_canvas.show()
			
		log.write_vars()
		tt = clock.time()
		# on attend 10 à 20 secondes et on sauvegarde dans var.delay
		n = np.random.randint(min_delay_time,max_delay_time)
		var.delay = n*1000-(tt-t)
		clock.sleep (var.delay)
		 
		################################################
		# On choisi si les suivantes seront congruentes
		# ou non (30 % de congruentes)
		################################################
		if np.random.random() > 0.3:
			var.same = False
		else:
			var.same = True
		
		##########################################
		# Si congruent : on ne fait que mélanger
		# sinon il faut en rechoisir trois autres
		# en vérifiant que ce n'est pas le même
		# dans le désordre
		##########################################
		if var.same == 'yes':
			np.random.shuffle(loc)
		else:
			R = differentSerie()
	
		##########################################
		# On modifie la localisation
		##########################################
		X_a = tx[np.random.randint(0,4)]
		Y_a = ty[np.random.randint(0,2)]
		
		while True:
			X_b = tx[np.random.randint(0,4)]
			Y_b = ty[np.random.randint(0,2)]
			if 10*X_a+Y_a != 10*X_b+Y_b:
				break
		
		while True:
			X_c = tx[np.random.randint(0,4)]
			Y_c = ty[np.random.randint(0,2)]
			if 10*X_a+Y_a != 10*X_c+Y_c:
				if 10*X_b+Y_b != 10*X_c+Y_c:
					break
		loc = [10*X_a+Y_a, 10*X_b+Y_b, 10*X_c+Y_c]	
		
		##########################################
		# 3 images au hasard 
		##########################################
		R = np.random.choice(7, 3, replace=False) + 1
	##############################
	# FIN DE LA BOUCLE TEMPORELLE
	##############################
	__end__
	___prepare__
	import numpy as np
	np.random.seed()
	
	var.same = True
	var.delay = 0
	
	#############################################
	# init first three images
	# on en choisi trois parmi 8 sans répétition
	#############################################
	R = np.random.choice(7, 3, replace=False) + 1
	
	###################################
	# Init first three positions
	# Ecran découpé en 4 x 2 = 8 blocs
	###################################
	my_canvas = canvas(exp)
	w = my_canvas.width / 8
	h = my_canvas.height / 4
	
	tx = [-3*w, -w, w, +3*w]
	ty = [-h, +h]
	
	# select first random position x,y
	X_a = tx[np.random.randint(0,4)]
	Y_a = ty[np.random.randint(0,2)]
	# select second random position, different from first
	while True:
		X_b = tx[np.random.randint(0,4)]
		Y_b = ty[np.random.randint(0,2)]
		if 10*X_a+Y_a != 10*X_b+Y_b:
			break
	# select third random position, different from previous ones	
	while True:
		X_c = tx[np.random.randint(0,4)]
		Y_c = ty[np.random.randint(0,2)]
		if 10*X_a+Y_a != 10*X_c+Y_c:
			if 10*X_b+Y_b != 10*X_c+Y_c:
				break
	print ("Xa:", end=" "); print(X_a)
	print ("Ya:", end=" "); print(Y_a)
	loc = [10*X_a+Y_a, 10*X_b+Y_b, 10*X_c+Y_c]
	print ("Loc:", end=" "); print(loc)
	
	###################################
	# le fichier audio pour le ding
	###################################
	ding_file = pool['notify.wav']
	my_sampler = Sampler(ding_file)
	
	###################################
	# Prepare keyboard - 10 sec timeout
	###################################
	my_keyboard = keyboard(keylist=['space'], timeout=5*1000)
	
	###################################
	# init a good & bad answer canvas
	###################################
	good_canvas = canvas()
	good_canvas.text('<b>Bonne réponse !!</b>')
	bad_canvas = canvas()
	bad_canvas.text('<b>Mauvaise réponse !!</b>')
	clear_canvas = canvas()
	#################################################
	# Compteurs pour les bonnes et mauvaises réponses
	#################################################
	answers_count_good = 0
	answers_count_bad  = 0
	
	def differentSerie():
		while True:
			Rr = np.random.choice(7, 3, replace=False) + 1
			if sorted(R)!=sorted(Rr):
				break
		return Rr
	__end__

define inline_script Subject_data
	set description "Executes Python code"
	___run__
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in u'0123456789'
	
	form = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(
		text=u'Merci de préciser :'
	)
	question1 = Label(text=u'Votre sexe :', center=False)
	question2 = Label(text=u'Votre âge :', center=False)
	question3 = Label(text=u'A quelle fréquence lisez-vous:', center=False)
	ratingScale1 = RatingScale(
		var=u'sexe',
		nodes=[u'Homme', u"Femme"]
	)
	input_age = TextInput(stub=u'Votre âge...', var=u'age')
	ratingScale2 = RatingScale(
		var=u'question2',
		nodes=[u'1f/semaine', u"Don't know", u'Disagree']
	)
	ratingScale3 = RatingScale(var='question3',
		nodes=[u'Agree', u"Don't know", u'Disagree'])
	nextButton = Button(text=u'Valider')
	form.set_widget(title, (0, 0), colspan=2)
	form.set_widget(question1, (0, 1))
	form.set_widget(question2, (0, 2))
	
	form.set_widget(ratingScale1, (1, 1))
	form.set_widget(input_age, (1, 2))
	
	form.set_widget(nextButton, (0, 4), colspan=2)
	
	while var.sexe is None: 
		form._exec()
	
	# rescale sexe modalities H=1 F=2 (INSEE)
	var.sexe = var.sexe + 1
	__end__
	set _prepare ""

define sequence Test_chiffres
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Instructions "[my_condition] = 'Test'"
	run Chiffres_Loop "[my_condition] = 'Test'"

define loop Trials
	set source_file ""
	set source table
	set repeat 5
	set order random
	set description "Exécuter un autre item plusieurs fois"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence Verbal
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Instr_Verbal "[my_condition] = 'Verbal'"
	run Audio_Loop "[my_condition] = 'Verbal'"

define sequence Visual
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Instr_Visual "[my_condition] = 'Visuel'"
	run Visual_Loop "[my_condition] = 'Visuel'"

define inline_script Visual_Loop
	set description "Executes Python code"
	___run__
	
	
		
	###################################
	# ON BOUCLE max_trial_duration MINUTES
	###################################
	for var.ms in clock.loop_for(max_trial_duration*60*1000):
		
		# just to see where we are in the logger :
		var.trial = True
		
		###################################
		# On appelle le participant (ding)
		###################################
		my_sampler = Sampler(ding_file)
		my_sampler.play(volume=signal_volume)
		my_canvas.fixdot()
		my_canvas.show()
	
		clock.sleep(1500)
		my_canvas.clear()
	
		#########################################
		# On affiche les trois images à la suite
		#########################################
		my_canvas.image(exp.pool[str(R[0]) + '.bmp'], x=X_a, y=Y_a)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.image(exp.pool[str(R[1]) + '.bmp'], x=X_b, y=Y_b)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.image(exp.pool[str(R[2]) + '.bmp'], x=X_c, y=Y_c)
		my_canvas.show()
		clock.sleep(1000)
		my_canvas.clear()
		my_canvas.show()
		
		#########################################
		# On attend la réponse ?
		#########################################
		my_keyboard.flush()
		t = clock.time()
		# pas pour la premiere boucle
		if var.ms > 0:
			var.key, var.key_time = my_keyboard.get_key()
			if var.key == u'space' and var.same == 'yes':
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			elif var.key != u'space' and var.same == 'no':	
				good_canvas.show()
				var.answers_count_good = var.answers_count_good + 1
			else:
				bad_canvas.show()
				var.answers_count_bad = var.answers_count_bad +1
			if var.same == 'yes':
				if var.key == u'space':
					var.good_same_count = var.good_same_count + 1
				else:
					var.bad_same_count = var.bad_same_count + 1
			clock.sleep(1000)
			clear_canvas.show()
			
		log.write_vars()
		tt = clock.time()
		# on attend 10 à 20 secondes et on sauvegarde dans var.delay
		n = np.random.randint(min_delay_time,max_delay_time)
		var.delay = n*1000-(tt-t)
		clock.sleep (var.delay)
		
		################################################
		# On choisi si les suivantes seront congruentes
		# ou non (30 % de congruentes)
		################################################
		if np.random.random() > 0.3:
			var.same = False
		else:
			var.same = True
		
		##########################################
		# Si congruent : on ne fait que mélanger
		# sinon il faut en rechoisir trois autres
		# en vérifiant que ce n'est pas le même
		# dans le désordre
		##########################################
		if var.same == 'yes':
			np.random.shuffle(R)
		else:
			R = differentSerie()
		print (R)
		##########################################
		# On modifie la localisation
		##########################################
		X_a = tx[np.random.randint(0,4)]
		Y_a = ty[np.random.randint(0,2)]
		
		while True:
			X_b = tx[np.random.randint(0,4)]
			Y_b = ty[np.random.randint(0,2)]
			if 10*X_a+Y_a != 10*X_b+Y_b:
				break
		
		while True:
			X_c = tx[np.random.randint(0,4)]
			Y_c = ty[np.random.randint(0,2)]
			if 10*X_a+Y_a != 10*X_c+Y_c:
				if 10*X_b+Y_b != 10*X_c+Y_c:
					break
				
	##############################
	# FIN DE LA BOUCLE TEMPORELLE
	##############################
	__end__
	___prepare__
	import numpy as np
	np.random.seed()
	
	var.same = True
	var.delay = 0
	
	#############################################
	# init first three images
	# on en choisi trois parmi 8 sans répétition
	#############################################
	R = np.random.choice(7, 3, replace=False) + 1
	
	###################################
	# Init first three positions
	# Ecran découpé en 4 x 2 = 8 blocs
	###################################
	my_canvas = canvas(exp)
	w = my_canvas.width / 8
	h = my_canvas.height / 4
	
	tx = [-3*w, -w, w, +3*w]
	ty = [-h, +h]
	
	X_a = tx[np.random.randint(0,4)]
	Y_a = ty[np.random.randint(0,2)]
	
	while True:
		X_b = tx[np.random.randint(0,4)]
		Y_b = ty[np.random.randint(0,2)]
		if 10*X_a+Y_a != 10*X_b+Y_b:
			break
		
	while True:
		X_c = tx[np.random.randint(0,4)]
		Y_c = ty[np.random.randint(0,2)]
		if 10*X_a+Y_a != 10*X_c+Y_c:
			if 10*X_b+Y_b != 10*X_c+Y_c:
				break
	
	###################################
	# le fichier audio pour le ding
	###################################
	ding_file = pool['notify.wav']
	my_sampler = Sampler(ding_file)
	
	###################################
	# Prepare keyboard - 10 sec timeout
	###################################
	my_keyboard = keyboard(keylist=['space'], timeout=5*1000)
	
	###################################
	# init a good & bad answer canvas
	###################################
	good_canvas = canvas()
	good_canvas.text('<b>Bonne réponse !!</b>')
	bad_canvas = canvas()
	bad_canvas.text('<b>Mauvaise réponse !!</b>')
	clear_canvas = canvas()
	#################################################
	# Compteurs pour les bonnes et mauvaises réponses
	#################################################
	answers_count_good = 0
	answers_count_bad  = 0
	
	
	def differentSerie():
		while True:
			Rr = np.random.choice(7, 3, replace=False) + 1
			if sorted(R)!=sorted(Rr):
				break
		return Rr
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Subject_data always
	run Init_condition always
	run Test_chiffres always
	run Visual always
	run Spatial always
	run Verbal always
	run Controle always
	run Remerciements always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad image1
	set duration keypress
	set description "Montrer des stimuli visuels"
	draw image center=1 file="1.bmp" scale=1 show_if=always x="[X_a]" y=-192 z_index=0

define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="Indicate how much you agree with the following statements"
	widget 0 1 1 1 label center=no text="Forms are easy"
	widget 1 1 1 1 rating_scale nodes="Agree;Don't know;Disagree" var=question1
	widget 0 2 1 1 label center=no text="I like data"
	widget 1 2 1 1 rating_scale nodes="Agree;Don't know;Disagree" var=question2
	widget 0 3 1 1 label center=no text="I like questionnaires"
	widget 1 3 1 1 rating_scale nodes="Agree;Don't know;Disagree" var=question3
	widget 0 4 2 1 button text=Next


define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	You are about to participate in an experiment.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Your question"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition never

